PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = trial
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
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    TextComponent word_1
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0,0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $word1
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    TextComponent categories
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $category
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    TextComponent word_2
      color = -1.0000, -1.0000, 1.0000
      letterHeight = 0.05
      pos [set every repeat] = (-0.5,0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $word2
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    TextComponent word_3
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.05
      pos [set every repeat] = (0.5,0)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $word3
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    TextComponent word_4
      color = 1.0000, 1.0000, -1.0000
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 4
      text [set every repeat] = $word4
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  Routine response
    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Type one word that you remember in this category:  
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 5
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      text:
        What was the colour of the word reported by you? Press one key:

        r = Red
        b = Blue
        g = Green
        y = Yellow
    KeyboardComponent key_resp
      allowedKeys = 'r','g','b','y'
      forceEndRoutine = True
      startVal [time (s)] = 5
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  Routine Instructions
    TextComponent text
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 15
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      text:
        Welcome

        For this experiment, you'll be shown 4 different words from a given category
        (For eg: category: Animal, words: Dog, Cat, Fish, Horse) will appear for 4 seconds and you are expected to memorise the words.

        After 4secs, you'll be asked to type a word you remember from the shown category and then give a key response about which colour is the word. Type the word and wait for the next category and do the same for the rest of the experiment.
  Routine end
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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      text:
        Thank you for participating in the experiment.

        Have a good day.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = condition_file.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'category': 'vehicle', 'word1': 'Car', 'word2': 'Bus', 'word3': 'Train', 'word4': 'Airplane'},
      {'category': 'furnitures', 'word1': 'Bed', 'word2': 'Desk', 'word3': 'Chair', 'word4': 'Table'},
      {'category': 'tools', 'word1': 'Hammer', 'word2': 'Pins', 'word3': 'Screwdriver', 'word4': 'Drill'},
      {'category': 'musical instrument', 'word1': 'Violin', 'word2': 'Guitar', 'word3': 'Drums', 'word4': 'Piano'}]
    Routine trial
    Routine response
  LoopTerminator trials
  Routine end
